opentrons/protocol-designer 5.2.6
schemaVersion: 4
protocolName: Plant DNA isolation MagMax thermo kit 
robot: {model: OT-2 Standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p300_multi_gen2: {mount: right}
modules:
  magneticModuleV2: {slot: 1}
  temperatureModuleV2: {slot: 4}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, slot: 12}
  Opentrons 96 Tip Rack 300 µL: {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 7}
  Container: {definitionId: opentrons/nest_1_reservoir_195ml/1, slot: 3}
  Supernatant liquid: {definitionId: opentrons/usascientific_96_wellplate_2.4ml_deep/1, slot: magneticModuleV2}
  Plate with beads: {definitionId: opentrons/usascientific_96_wellplate_2.4ml_deep/1, slot: 2}
  Opentrons 96 Filter Tip Rack 1000 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, slot: 5}
  DNA: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, slot: temperatureModuleV2}
  Liquids (beads+Elution buffer): {definitionId: opentrons/nest_12_reservoir_15ml/1, slot: 6}
  Opentrons 96 Tip Rack 300 µL (1): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 8}
  Opentrons 96 Tip Rack 300 µL (2): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 9}
  Opentrons 96 Tip Rack 300 µL (3): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 10}
  Opentrons 96 Tip Rack 300 µL (4): {definitionId: opentrons/opentrons_96_tiprack_300ul/1, slot: 11}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p300_multi_gen2: opentrons/opentrons_96_tiprack_300ul/1
ingredients:
  - Binding beads
  - Plant lysate
  - Absolute ethanol
  - Wash 1
  - Wash 2
  - Elution buffer
  - sample+beads+ethanol
  - beads+DNA
ingredLocations:
  Container:
    Wash 1 {volume: 39000}: A1
  Supernatant liquid:
    sample+beads+ethanol {volume: 620}: A2-H2, A3-H3, A4-H4, A5-D5
  Plate with beads:
    Plant lysate {volume: 300}: A2-H2, A3-H3, A4-H4, A5-D5
  Liquids (beads+Elution buffer):
    Binding beads {volume: 2000}: A1
    Elution buffer {volume: 5000}: A2
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 70
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 70
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 20
  path: single
  changeTip: always
  aspirate_labware: Liquids (beads+Elution buffer)
  aspirate_wells: A1
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Ethanol
  pipette: p300_multi_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Container
  aspirate_wells: A1
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 300
  times: 10
  changeTip: always
  labware: Plate with beads
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Change container from ethanol to Wash1 in slot 9.
    Move plate from 5 to MAG (Step 3), wait 5 min until solution is clear, resume protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 620
  path: single
  changeTip: always
  aspirate_labware: Supernatant liquid
  aspirate_wells: A2-H2, A3-H3, A4-H4, A5-D5
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move the plate from MAG to position 2, then resume protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Container
  aspirate_wells: A1
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 200
  times: 10
  changeTip: always
  labware: Plate with beads
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move plate from 2 to MAG for 3 min or until the solution is clear, then resume the protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 298
  path: single
  changeTip: always
  aspirate_labware: Supernatant liquid
  aspirate_wells: A2-A5
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move the plate from MAG to position 2. AND switch wash1 for wash2 in slot 9.
- stepType: moveLiquid
  stepName: transfer
  stepDetails: This is wash2_first time
  pipette: p300_multi_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Container
  aspirate_wells: A1
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 200
  times: 10
  changeTip: always
  labware: Plate with beads
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move plate from 2 to MAG for 3 min or until the solution is clear, then resume protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 298
  path: single
  changeTip: always
  aspirate_labware: Supernatant liquid
  aspirate_wells: A2-A5
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move the plate from MAG to position 2, then resume protocol.
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Wash2_second time
  pipette: p300_multi_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Container
  aspirate_wells: A1
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 200
  times: 10
  changeTip: always
  labware: Plate with beads
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Move plate from 2 to MAG for 5 min or until the solution is clear, then resume protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 298
  path: single
  changeTip: always
  aspirate_labware: Supernatant liquid
  aspirate_wells: A2-A5
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Incubate for 5 min on MAG to allow the ethanol evaporate. 
    Move the plate from MAG to position 2, Here you only have the beads.
    Resume the protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 50
  path: single
  changeTip: always
  aspirate_labware: Liquids (beads+Elution buffer)
  aspirate_wells: A2
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  dispense_labware: Plate with beads
  dispense_wells: A2-A5
- stepType: mix
  stepName: mix
  pipette: p300_multi_gen2
  volume: 25
  times: 10
  changeTip: always
  labware: Plate with beads
  wells: A2-A5
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  mix_mmFromBottom: 0.5
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: FILL NEW TIPS in slot 7.
    Move from 2 to the Temp. module. Wait 5 min. Put it back on MAG for 5 min or until the solution is clear.
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 20
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 20
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: Place the PCR plate to the thermal module (20C). Then resume the protocol.
- stepType: moveLiquid
  stepName: transfer
  pipette: p300_multi_gen2
  volume: 49
  path: single
  changeTip: always
  aspirate_labware: Supernatant liquid
  aspirate_wells: A2-A5
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  dispense_labware: DNA
  dispense_wells: A2-A5
labwareDefinitions:
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commands:
- temperatureModule/setTargetTemperature: {module: temperatureModuleV2, temperature: 70}
- temperatureModule/awaitTemperature: {module: temperatureModuleV2, temperature: 70}
- pickUpTip: {pipette: p300_multi_gen2, labware: Opentrons 96 Tip Rack 300 µL, well: A1}
- aspirate: {pipette: p300_multi_gen2, volume: 20, labware: Liquids (beads+Elution buffer), well: A1, offsetFromBottomMm: 1, flowRate: 94}
- dispense: {pipette: p300_multi_gen2, volume: 20, labware: Plate with beads, well: A2, offsetFromBottomMm: 0.5, flowRate: 94}
- dropTip: {pipette: p300_multi_gen2, labware: Trash, well: A1}
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