opentrons/protocol-designer 6.0.1
schemaVersion: 6
protocolName: Extraction & PACE Assay Part 2 (thermocycling_Co-42(2))
author: marysia
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  magneticModuleV2: {location: 1}
  thermocyclerModuleV1: {location: 7}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 6}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 4}
  Liquids: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  PCR Plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  Samples: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, location: magneticModuleV2}
  Tube liquids: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, location: 5}
  Opentrons 96 Tip Rack 20 µL (1): {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 3}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Elution buffer
  - ddH2O
  - PACE Master Mix
  - PACE Assay Mix
  - Samples
ingredLocations:
  Liquids:
    Elution buffer {volume: 14000}: A10
  Samples:
    Samples {volume: 80}: A1-H1, A2-F2
  Tube liquids:
    ddH2O {volume: 1500}: C1
    PACE Master Mix {volume: 500}: D1
    PACE Assay Mix {volume: 100}: A2
savedStepForms:
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: put in thermocycler, remove temp block and refill tips
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 250
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: D1
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  dispense_labware: Tube liquids
  dispense_wells: D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 6.9
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: A2
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  aspirate_flowRate: 2
  dispense_labware: Tube liquids
  dispense_wells: D6
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 200
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: Tube liquids
  dispense_wells: D6
  dispense_mix_checkbox: true
  dispense_mix_times: 10
  dispense_mix_volume: 500
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 9
  path: single
  changeTip: once
  aspirate_labware: Tube liquids
  aspirate_wells: D6
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  dispense_labware: PCR Plate
  dispense_wells: A1-H1, A2-H2, A3-H3, A4-H4, A5-H5, A6-F6
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: A1
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  dispense_labware: PCR Plate
  dispense_wells: A1, A3, A5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: B1
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  dispense_labware: PCR Plate
  dispense_wells: B1, B3, B5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: C1
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  dispense_labware: PCR Plate
  dispense_wells: C1, C3, C5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: D1
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  dispense_labware: PCR Plate
  dispense_wells: D1, D3, D5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: E1
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  dispense_labware: PCR Plate
  dispense_wells: E1, E3, E5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: F1
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  dispense_labware: PCR Plate
  dispense_wells: F1, F3, F5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: G1
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  dispense_labware: PCR Plate
  dispense_wells: G1, G3, G5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: H1
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  dispense_labware: PCR Plate
  dispense_wells: H1, H3, H5
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: A2
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  dispense_labware: PCR Plate
  dispense_wells: A2, A4, A6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: B2
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  dispense_labware: PCR Plate
  dispense_wells: B2, B4, B6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: C2
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  dispense_labware: PCR Plate
  dispense_wells: C2, C4, C6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: D2
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  dispense_labware: PCR Plate
  dispense_wells: D2, D4, D6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: E2
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  dispense_labware: PCR Plate
  dispense_wells: E2, E4, E6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Samples
  aspirate_wells: F2
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  dispense_labware: PCR Plate
  dispense_wells: F2, F4, F6
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 1
  path: multiDispense
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: PCR Plate
  dispense_wells: G2, H2, G4, H4
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: PCR Plate
  dispense_wells: G12, H12
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Add caps to PCR Plate
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: false
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 10
  profileTargetLidTemp: 94
  orderedProfileItems:
    - {type: profileStep, title: enzyme activation, temperature: 94, durationMinutes: 15}
    - {type: profileCycle, repetitions: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 60, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: anealing/extension, temperature: 59, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 58, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annelaing/extension, temperature: 57, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 56, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 55, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 54, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 53, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 52, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 51, durationMinutes: 1}
    - {type: profileCycle, repetitions: 30}
      - {type: profileStep, title: denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 57, durationMinutes: 1}
    - {type: profileStep, title: ending rest, temperature: 22, durationMinutes: 3}
  blockIsActiveHold: false
  lidIsActiveHold: false
  lidOpenHold: true
labwareDefinitions:
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commands:
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- delay: {message: put in thermocycler, remove temp block and refill tips, waitForResume: true}
- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons 96 Filter Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 250, labwareId: Tube liquids, wellName: D1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 137.35}
- dispense: {pipetteId: p1000_single_gen2, volume: 250, labwareId: Tube liquids, wellName: D6, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 137.35}
- dropTip: {pipetteId: p1000_single_gen2, labwareId: Trash, wellName: A1}
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