opentrons/protocol-designer 6.0.1
schemaVersion: 6
protocolName: Extraction & PACE Assay for differentials - Part 1 (until ethanol evaporation)
author: marysia
description: MagMax extraction until elution
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  magneticModuleV2: {location: 1}
  temperatureModuleV2: {location: 3}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 4}
  NEST 96 Deep Well Plate 2mL: {definitionId: opentrons/nest_96_wellplate_2ml_deep/1, location: magneticModuleV2}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 6}
  Opentrons 96 Filter Tip Rack 1000 µL (1): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 9}
  Tube Liquids: {definitionId: opentrons/opentrons_24_tuberack_nest_2ml_snapcap/1, location: 5}
  Liquids: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  Samples (1): {definitionId: opentrons/opentrons_24_aluminumblock_nest_1.5ml_snapcap/1, location: temperatureModuleV2}
  Opentrons 96 Filter Tip Rack 1000 µL (2): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 11}
  Opentrons 96 Filter Tip Rack 1000 µL (3): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 8}
  Opentrons 96 Filter Tip Rack 1000 µL (4): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 10}
  Opentrons 96 Filter Tip Rack 1000 µL (5): {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 7}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Plant lysate
  - Beads
  - Ethanol
  - Wash 1
  - Wash 2
  - Elution buffer
  - Sample + Beads + Ethanol
  - Beads + DNA
  - DNA in elution buffer
  - ddH2O
  - PACE MasterMix
  - PACE Assay Mix
ingredLocations:
  Tube Liquids:
    Beads {volume: 1800}: A1, B1
    ddH2O {volume: 2000}: C1
    PACE MasterMix {volume: 750}: D1
    PACE Assay Mix {volume: 20}: A2
  Liquids:
    Ethanol {volume: 14000}: A1-A3
    Wash 1 {volume: 14000}: A4-A6
    Wash 2 {volume: 15000}: A7-A9
    Elution buffer {volume: 14000}: A10
  Samples (1):
    Plant lysate {volume: 500}: A1-D1, A2-D2, A3-D3, A4, B4
savedStepForms:
- stepType: temperature
  stepName: temperature
  moduleId: temperatureModuleV2
  setTemperature: true
  targetTemperature: 22
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTemperature
  pauseTemperature: 22
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 25
  path: single
  changeTip: once
  aspirate_labware: Tube Liquids
  aspirate_wells: A1
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  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
- stepType: moveLiquid
  stepName: transfer
  stepDetails: Check if 5mm is okay
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: always
  aspirate_labware: Samples (1)
  aspirate_wells: A1-D1, A2-D2, A3-D3, A4, B4
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  aspirate_mmFromBottom: 5
  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilResume
  pauseMessage: was 5mm from the bottom okay?
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 400
  path: single
  changeTip: once
  aspirate_labware: Liquids
  aspirate_wells: A1
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  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
  dispense_mmFromBottom: 35
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 5
  pauseMessage: Wait for 5 minutes or until solution is clear
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 700
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1-H1, A2-F2
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Liquids
  aspirate_wells: A4
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  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
  dispense_mix_checkbox: true
  dispense_mix_volume: 250
  dispense_mmFromBottom: 14.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wait 2 minutes for magnet
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1-H1, A2-F2
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: Liquids
  aspirate_wells: A7
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  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
  dispense_mix_checkbox: true
  dispense_mix_volume: 250
  dispense_mmFromBottom: 14.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wait 2 minutes for magnet
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1-H1, A2-F2
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: once
  aspirate_labware: Liquids
  aspirate_wells: A7
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  dispense_labware: NEST 96 Deep Well Plate 2mL
  dispense_wells: A1-H1, A2-F2
  dispense_mmFromBottom: 35.5
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
  magnetAction: engage
  engageHeight: 6.8
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 2
  pauseMessage: wait 2 minutes for magnet
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 300
  path: single
  changeTip: always
  aspirate_labware: NEST 96 Deep Well Plate 2mL
  aspirate_wells: A1-H1, A2-F2
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  dispense_labware: Trash
  dispense_wells: A1
- stepType: pause
  stepName: pause
  moduleId: temperatureModuleV2
  pauseAction: untilTime
  pauseMinute: 10
  pauseMessage: allow ethanol to evaporate
- stepType: magnet
  stepName: magnet
  moduleId: magneticModuleV2
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  magnetAction: disengage
labwareDefinitions:
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commands:
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- temperatureModule/setTargetTemperature: {moduleId: temperatureModuleV2, celsius: 22}
- temperatureModule/waitForTemperature: {moduleId: temperatureModuleV2, celsius: 22}
- pickUpTip: {pipetteId: p20_single_gen2, labwareId: Opentrons 96 Tip Rack 20 µL, wellName: A1}
- aspirate: {pipetteId: p20_single_gen2, volume: 20, labwareId: Tube Liquids, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
- dispense: {pipetteId: p20_single_gen2, volume: 20, labwareId: NEST 96 Deep Well Plate 2mL, wellName: A1, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 3.78}
- aspirate: {pipetteId: p20_single_gen2, volume: 5, labwareId: Tube Liquids, wellName: A1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 3.78}
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