opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: JUST thermocycling_GS Primer 1, 31 samples
author: marysia
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  thermocyclerModuleV1: {location: 7}
  temperatureModuleV2: {location: 3}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 6}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 4}
  Liquids: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  PCR Plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  Tube liquids: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, location: 5}
  Samples: {definitionId: opentrons/opentrons_24_aluminumblock_nest_1.5ml_snapcap/1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Elution buffer
  - ddH2O
  - PACE Master Mix
  - PACE Assay Mix
  - Samples
ingredLocations:
  Liquids:
    Elution buffer {volume: 14000}: A10
  Tube liquids:
    ddH2O {volume: 1500}: C1
    PACE Master Mix {volume: 750}: D1
    PACE Assay Mix {volume: 100}: A2
    Samples {volume: 80}: A5-D5, A6, B6
  Samples:
    Samples {volume: 80}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Add caps to PCR Plate
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: false
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 10
  profileTargetLidTemp: 94
  orderedProfileItems:
    - {type: profileStep, title: enzyme activation, temperature: 94, durationMinutes: 15}
    - {type: profileCycle, repetitions: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 60, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: anealing/extension, temperature: 59, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 58, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annelaing/extension, temperature: 57, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 56, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 55, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 54, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 53, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 52, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 51, durationMinutes: 1}
    - {type: profileCycle, repetitions: 30}
      - {type: profileStep, title: denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 57, durationMinutes: 1}
    - {type: profileStep, title: ending rest, temperature: 22, durationMinutes: 3}
  blockIsActiveHold: false
  lidIsActiveHold: false
  lidOpenHold: true
labwareDefinitions:
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commands:
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- delay: {message: Add caps to PCR Plate, waitForResume: true}
- thermocycler/closeLid: {moduleId: thermocyclerModuleV1}
- thermocycler/setTargetLidTemperature: {moduleId: thermocyclerModuleV1, celsius: 94}
- thermocycler/waitForLidTemperature: {moduleId: thermocyclerModuleV1}
- thermocycler/runProfile: {moduleId: thermocyclerModuleV1, profile: [{holdSeconds: 900, celsius: 94}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 60}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 59}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 58}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 56}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 55}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 54}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 53}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 52}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 51}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 20, celsius: 94}, {holdSeconds: 60, celsius: 57}, {holdSeconds: 180, celsius: 22}], blockMaxVolumeUl: 10}
- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
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