opentrons/protocol-designer 6.2.2
schemaVersion: 6
protocolName: PACE Assay (dual marker no dna)
author: marysia
robot: {model: OT-2 Standard, deckId: ot2_standard}
defaultValues: {aspirate_mmFromBottom: 1, dispense_mmFromBottom: 0.5, touchTip_mmFromTop: -1, blowout_mmFromTop: 0}
pipettes:
  p1000_single_gen2: {mount: left}
  p20_single_gen2: {mount: right}
modules:
  thermocyclerModuleV1: {location: 7}
  temperatureModuleV2: {location: 3}
labware:
  Trash: {definitionId: opentrons/opentrons_1_trash_1100ml_fixed/1, location: 12}
  Opentrons 96 Filter Tip Rack 1000 µL: {definitionId: opentrons/opentrons_96_filtertiprack_1000ul/1, location: 6}
  Opentrons 96 Tip Rack 20 µL: {definitionId: opentrons/opentrons_96_tiprack_20ul/1, location: 4}
  Liquids: {definitionId: opentrons/nest_12_reservoir_15ml/1, location: 2}
  PCR Plate: {definitionId: opentrons/nest_96_wellplate_100ul_pcr_full_skirt/1, location: thermocyclerModuleV1}
  Tube liquids: {definitionId: opentrons/opentrons_24_tuberack_nest_1.5ml_snapcap/1, location: 5}
  Samples: {definitionId: opentrons/opentrons_24_aluminumblock_nest_1.5ml_snapcap/1, location: temperatureModuleV2}
pipetteTiprackAssignments:
  p1000_single_gen2: opentrons/opentrons_96_filtertiprack_1000ul/1
  p20_single_gen2: opentrons/opentrons_96_tiprack_20ul/1
ingredients:
  - Elution buffer
  - ddH2O
  - PACE Master Mix
  - PACE Assay Mix (S08)
  - Samples
  - PACE Assay Mix (Co-4_08)
ingredLocations:
  Liquids:
    Elution buffer {volume: 14000}: A10
  Tube liquids:
    ddH2O {volume: 1500}: C1
    PACE Master Mix {volume: 750}: D1
    PACE Assay Mix (S08) {volume: 100}: A2
    Samples {volume: 80}: A5-D5, A6, B6
    PACE Assay Mix (Co-4_08) {volume: 100}: B2
  Samples:
    Samples {volume: 80}: A1-D1, A2-D2, A3-D3, A4-D4, A5-D5, A6-D6
savedStepForms:
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: put in thermocycler, remove temp block and refill tips
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: true
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 150
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: D1
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  dispense_labware: Tube liquids
  dispense_wells: D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 4.1
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: A2
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  aspirate_flowRate: 2
  dispense_labware: Tube liquids
  dispense_wells: D6
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: Tube liquids
  dispense_wells: D6
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 150
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: D1
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  dispense_labware: Tube liquids
  dispense_wells: C6
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 4.1
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: B2
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  aspirate_flowRate: 2
  dispense_labware: Tube liquids
  dispense_wells: C6
  blowout_checkbox: true
  blowout_location: dest_well
- stepType: moveLiquid
  stepName: transfer
  pipette: p1000_single_gen2
  volume: 120
  path: single
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: Tube liquids
  dispense_wells: C6
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 9
  path: multiDispense
  changeTip: once
  aspirate_labware: Tube liquids
  aspirate_wells: D6
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  dispense_labware: PCR Plate
  dispense_wells: A1-C1, A2-C2, A3-C3, A4-C4, A5-C5, A8-C8, A9-C9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 9
  path: multiDispense
  changeTip: once
  aspirate_labware: Tube liquids
  aspirate_wells: C6
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  dispense_labware: PCR Plate
  dispense_wells: E1-G1, E2-G2, E3-G3, E4-G4, E5-G5, E8-G8, E9-G9
  disposalVolume_checkbox: true
  disposalVolume_volume: 1
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: multiDispense
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C1
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  dispense_labware: PCR Plate
  dispense_wells: A6-C6, E6-G6
  disposalVolume_checkbox: true
  disposalVolume_volume: 0
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: multiDispense
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: C6
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  dispense_labware: PCR Plate
  dispense_wells: E7-G7
  disposalVolume_checkbox: true
  disposalVolume_volume: 0
  blowout_location: Trash
- stepType: moveLiquid
  stepName: transfer
  pipette: p20_single_gen2
  volume: 10
  path: multiDispense
  changeTip: always
  aspirate_labware: Tube liquids
  aspirate_wells: D6
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  dispense_labware: PCR Plate
  dispense_wells: A7-C7
  disposalVolume_checkbox: true
  disposalVolume_volume: 0
  blowout_location: Trash
- stepType: pause
  stepName: pause
  pauseAction: untilResume
  pauseMessage: Add caps to PCR Plate
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerState
  blockIsActive: false
  lidIsActive: false
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  lidOpen: false
- stepType: thermocycler
  stepName: thermocycler
  moduleId: thermocyclerModuleV1
  thermocyclerFormType: thermocyclerProfile
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  profileVolume: 10
  profileTargetLidTemp: 94
  orderedProfileItems:
    - {type: profileStep, title: enzyme activation, temperature: 94, durationMinutes: 15}
    - {type: profileCycle, repetitions: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 60, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: anealing/extension, temperature: 59, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 58, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annelaing/extension, temperature: 57, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 56, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 55, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 54, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 53, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 52, durationMinutes: 1}
      - {type: profileStep, title: template denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 51, durationMinutes: 1}
    - {type: profileCycle, repetitions: 30}
      - {type: profileStep, title: denaturation, temperature: 94, durationSeconds: 20}
      - {type: profileStep, title: annealing/extension, temperature: 57, durationMinutes: 1}
    - {type: profileStep, title: ending rest, temperature: 22, durationMinutes: 3}
  blockIsActiveHold: false
  lidIsActiveHold: false
  lidOpenHold: true
labwareDefinitions:
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commands:
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- delay: {message: put in thermocycler, remove temp block and refill tips, waitForResume: true}
- thermocycler/openLid: {moduleId: thermocyclerModuleV1}
- pickUpTip: {pipetteId: p1000_single_gen2, labwareId: Opentrons 96 Filter Tip Rack 1000 µL, wellName: A1}
- aspirate: {pipetteId: p1000_single_gen2, volume: 150, labwareId: Tube liquids, wellName: D1, wellLocation: {origin: bottom, offset: {z: 1}}, flowRate: 137.35}
- dispense: {pipetteId: p1000_single_gen2, volume: 150, labwareId: Tube liquids, wellName: D6, wellLocation: {origin: bottom, offset: {z: 0.5}}, flowRate: 137.35}
- dropTip: {pipetteId: p1000_single_gen2, labwareId: Trash, wellName: A1}
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